PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['assets/continue.png', 'spreadsheets/choose_digitSpan.xlsx', 'spreadsheets/conditions.xlsx', 'spreadsheets/eight.xlsx', 'spreadsheets/eleven.xlsx', 'spreadsheets/five.xlsx', 'spreadsheets/four.xlsx', 'spreadsheets/nine.xlsx', 'spreadsheets/seven.xlsx', 'spreadsheets/six.xlsx', 'spreadsheets/ten.xlsx', 'spreadsheets/three.xlsx', 'spreadsheets/twelve.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = digit_span
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine Instructions
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    ImageComponent background
      image = assets/background.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextComponent instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        欢迎参加数字记忆大挑战！

        在这个任务中，你需要集中注意力，记住屏幕上快速闪现的一串数字。

        任务规则详解：任务从3位数字开始。在每个数字序列长度上，你都有3次尝试机会。
        只要你在3次尝试中能正确1次，数字序列就会增加1位，进入下一个难度。

        关于屏幕显示：数字会一个接一个地出现。在每个数字开始前，你会看到一个十字“+”号。
        请注意：这个“+”号是一个分隔符，用于提示你下一个数字即将出现。

        关于如何回答：当屏幕出现“回忆”字样时，请使用键盘上方的数字键，按顺序输入你记住的所有数字。
        输入时，请将数字紧挨着输入，中间不要加空格。

        举个例子：如果屏幕上依次显示的是“+”，“3“，”+“，”6“，”+“，”9”，
        那么你需要在回忆时，直接在键盘上输入“369”。如果输错了，可以按退格键删除后重新输入。

        每次尝试后，你都会立刻得到反馈，知道自己是否记对了。

        准备好了吗？请点击下面的按钮开始挑战吧！
    ImageComponent cont_button_2
      image = assets/continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent start_mouse
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Presentation
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    ImageComponent background_2
      image = assets/background.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[digitLoop.thisN]
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  Routine Recall
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    ImageComponent background_3
      image = assets/background.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = 请回忆数字序列
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    TextboxComponent textbox
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.1
      size = (1, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent cont_button
      image = assets/continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent fb_code
      Code Type = Auto->JS
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      End Routine:
        if textbox.text == str(digits):
            correct = 1

            # go to next level
            trials.finished = True
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)

        correct_at_this_level += correct

        if trials.thisN+1 == trials.nTotal and correct_at_this_level != trials.nTotal:
            # end level and blocks
            last_level = level
            trials.finished = True
            blocks.finished = True
    MouseComponent mouse
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Feedback
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    ImageComponent background_4
      image = assets/background.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine End
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    ImageComponent background_5
      image = assets/background.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $'你所能记住的最长数字序列为' + str(last_level-1)
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  Routine reset_correct
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        correct_at_this_level = 0
Flow
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = spreadsheets/choose_digitSpan.xlsx
    isTrials = False
    loopType = sequential
    nReps = 5
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    conditions:
      [{'condition_file': 'three.xlsx', 'level': 3},
      {'condition_file': 'four.xlsx', 'level': 4},
      {'condition_file': 'five.xlsx', 'level': 5},
      {'condition_file': 'six.xlsx', 'level': 6},
      {'condition_file': 'seven.xlsx', 'level': 7},
      {'condition_file': 'eight.xlsx', 'level': 8},
      {'condition_file': 'nine.xlsx', 'level': 9},
      {'condition_file': 'ten.xlsx', 'level': 10},
      {'condition_file': 'eleven.xlsx', 'level': 11},
      {'condition_file': 'twelve.xlsx', 'level': 12}]
    Routine reset_correct
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $'spreadsheets/'+condition_file
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = digitSpan
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        Routine Presentation
      LoopTerminator digitLoop
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
